PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = ImmediateRecall_FPA
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Routines
  Routine GutenMorgen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Guten Morgen!
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  Routine Abfrage
    ImageComponent CueFigure
      image [set every repeat] = $Cue
      pos = (-0.5, 0)
      size = (0.380, 0.220)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      texture resolution = 512
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    ImageComponent topLeft
      image [set every repeat] = $L1
      pos = (0.1, 0.2)
      size = (0.380, 0.220)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      texture resolution = 512
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    ImageComponent bottomLeft
      image [set every repeat] = $L2
      pos = (0.1, -0.2)
      size = (0.380, 0.220)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      texture resolution = 512
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    ImageComponent topRight
      image [set every repeat] = $R1
      pos = (0.6, 0.2)
      size = (0.380, 0.220)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      texture resolution = 512
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    ImageComponent bottomRight
      image [set every repeat] = $R2
      pos = (0.6, -0.2)
      size = (0.380, 0.220)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      texture resolution = 512
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    ImageComponent Pfeile
      image = Pfeile.png
      ori = 45
      pos = (0.35, 0)
      size = (0.315, 0.191)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 4
      texture resolution = 512
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    MouseComponent mouse_resp
      clickable = topLeft, bottomLeft, topRight, bottomRight
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 4
      timeRelativeTo = routine
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  Routine VielenDank
    TextComponent Ende
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Ende

        Vielen Dank!
  Routine Correct
    ImageComponent Figure1
      image [set every repeat] = $Cue
      pos = (-0.4, 0)
      size = (0.63, 0.382)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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    ImageComponent Figure2
      image [set every repeat] = $Target
      pos = (0.4, 0)
      size = (0.63, 0.382)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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  Routine Anleitung1
    TextComponent Anleitungstext1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Im Folgenden wird Ihnen für sieben Sekunden auf der linken Seite des Bildschirms eine Figur gezeigt.

        Auf der rechten Seite werden vier Antwortmöglichkeiten zu sehen sein.

        -> Weiter mit einem Mausklick
    MouseComponent mouseNext
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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  Routine ISIs
    ImageComponent Fixation
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      texture resolution = 512
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    CodeComponent ITI
      Code Type = Auto->JS
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      Begin Routine:
        jitter = random() * 3.3 + 1.7
        jitter = round(jitter, 1)
        thisExp.addData('jitter', jitter)
  Routine Anleitung2
    TextComponent Anleitungstext2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Bitte antworten Sie immer erst, wenn die Pfeile zwischen den Antwortmöglichkeiten auftauchen.
        Sie haben dann noch 4 Sekunden um mit einem Mausklick das korrekte Figurenpaar aus der Lernphase zu vervollständigen.

        Nach Ihrer Antwort wird Ihnen das richtige Figurenpaar angezeigt.

        Zwischen den Aufgaben wird es kurze Pausen geben.

        -> Weiter mit einem Mausclick
    MouseComponent mouseNext3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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  Routine PreStimulus
    ImageComponent Cross
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine WaitingforScanner
    TextComponent Wait_for_Scanner
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Warte auf Scanner...
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    KeyboardComponent ScannerStart
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Anleitung1
  Routine Anleitung2
  Routine WaitingforScanner
  Routine PreStimulus
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:60
    conditionsFile = FPA_ImmRec_Stimulus_List.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Cue', 'FPA_Stimuli/abstract112.png'), ('Target', 'FPA_Stimuli/abstract102.png'), ('L1', 'FPA_Stimuli/abstract061.png'), ('L2', 'FPA_Stimuli/abstract020.png'), ('R1', 'FPA_Stimuli/abstract026.png'), ('R2', 'FPA_Stimuli/abstract102.png'), ('corrPos', 'R2'), ('corrAnsw', 'FPA_Stimuli/abstract102.png')]),
      OrderedDict([('Cue', 'FPA_Stimuli/wobbly007.png'), ('Target', 'FPA_Stimuli/wobbly089.png'), ('L1', 'FPA_Stimuli/wobbly089.png'), ('L2', 'FPA_Stimuli/wobbly010.png'), ('R1', 'FPA_Stimuli/wobbly015.png'), ('R2', 'FPA_Stimuli/wobbly045.png'), ('corrPos', 'L1'), ('corrAnsw', 'FPA_Stimuli/wobbly089.png')]),
      OrderedDict([('Cue', 'FPA_Stimuli/wobbly079.png'), ('Target', 'FPA_Stimuli/wobbly113.png'), ('L1', 'FPA_Stimuli/wobbly113.png'), ('L2', 'FPA_Stimuli/wobbly083.png'), ('R1', 'FPA_Stimuli/wobbly089.png'), ('R2', 'FPA_Stimuli/wobbly016.png'), ('corrPos', 'L1'), ('corrAnsw', 'FPA_Stimuli/wobbly113.png')]),
      OrderedDict([('Cue', 'FPA_Stimuli/wobbly102.png'), ('Target', 'FPA_Stimuli/wobbly104.png'), ('L1', 'FPA_Stimuli/wobbly104.png'), ('L2', 'FPA_Stimuli/wobbly099.png'), ('R1', 'FPA_Stimuli/wobbly092.png'), ('R2', 'FPA_Stimuli/wobbly051.png'), ('corrPos', 'L1'), ('corrAnsw', 'FPA_Stimuli/wobbly104.png')])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
    Routine Abfrage
    Routine ISIs
    Routine Correct
    Routine ISIs
  LoopTerminator trials
  Routine VielenDank
