PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Lernen_FPA
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Routines
  Routine EndeLernphase
    TextComponent TextEnde
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Ende

        Vielen Dank
  Routine StartLernphase
    TextComponent Wilkommen
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Herzlich Willkommen!

        In der folgenden Lernphase werden Ihnen 60 gepaarte Figuren mit Pausen dazwischen präsentiert. Nach der Hälfte haben SIe eine kleine Pause.

        Bitte versuchen Sie sich möglichst viele Figurenpaare zu merken.
        Es ist hilfreich, die unsinnigen Figuren mit Ihnen vertrauten Bilddarstellungen zu verbinden.

        Um die Lernphase zu starten, drücken Sie bitte die Maustaste.

        Viel Erfolg!
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine FigurePairedPresentation
    ImageComponent FigureA
      image [set every repeat] = $Cue
      pos = (-0.4, 0)
      size = (0.63, 0.382)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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    ImageComponent FigureB
      image [set every repeat] = $Target
      pos = (0.4, 0)
      size = (0.63, 0.382)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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  Routine ISIs
    ImageComponent Fixation
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      texture resolution = 512
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    CodeComponent ITI
      Code Type = Auto->JS
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      Begin Routine:
        jitter = random() * 3.3 + 1.7
        jitter = round(jitter, 1)
        thisExp.addData('jitter', jitter)
  Routine Pause
    ImageComponent fixation_point
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 56
      texture resolution = 512
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  Routine PauseEnd
    TextComponent Pause2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Pause Ende
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  Routine PauseStart
    TextComponent Pause1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Kleine Pause
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    KeyboardComponent key_resp
      allowedKeys = 'enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PreStimulus
    ImageComponent Kreuz
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine WaitingforScanner
    TextComponent Wait_for_Scanner
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Warte auf Scanner
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    KeyboardComponent ScannerStart
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine StartLernphase
  Routine WaitingforScanner
  Routine PreStimulus
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:30
    conditionsFile = FPA_Lernen_Stimulus_List.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Cue', 'FPA_Stimuli/geometric081.png'), ('Target', 'FPA_Stimuli/geometric071.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract035.png'), ('Target', 'FPA_Stimuli/abstract084.png'), ('Number', 2)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract067.png'), ('Target', 'FPA_Stimuli/abstract052.png'), ('Number', 2)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric064.png'), ('Target', 'FPA_Stimuli/geometric054.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract105.png'), ('Target', 'FPA_Stimuli/abstract010.png'), ('Number', 2)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract108.png'), ('Target', 'FPA_Stimuli/abstract120.png'), ('Number', 2)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric111.png'), ('Target', 'FPA_Stimuli/geometric101.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract088.png'), ('Target', 'FPA_Stimuli/abstract091.png'), ('Number', 2)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric160.png'), ('Target', 'FPA_Stimuli/geometric150.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric144.png'), ('Target', 'FPA_Stimuli/geometric134.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric129.png'), ('Target', 'FPA_Stimuli/geometric119.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric159.png'), ('Target', 'FPA_Stimuli/geometric149.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract068.png'), ('Target', 'FPA_Stimuli/abstract037.png'), ('Number', 2)])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
    Routine FigurePairedPresentation
    Routine ISIs
  LoopTerminator trials
  Routine PauseStart
  Routine WaitingforScanner
  Routine PreStimulus
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 31:60
    conditionsFile = FPA_Lernen_Stimulus_List.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Cue', 'FPA_Stimuli/geometric081.png'), ('Target', 'FPA_Stimuli/geometric071.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract035.png'), ('Target', 'FPA_Stimuli/abstract084.png'), ('Number', 2)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract067.png'), ('Target', 'FPA_Stimuli/abstract052.png'), ('Number', 2)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric064.png'), ('Target', 'FPA_Stimuli/geometric054.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract105.png'), ('Target', 'FPA_Stimuli/abstract010.png'), ('Number', 2)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract108.png'), ('Target', 'FPA_Stimuli/abstract120.png'), ('Number', 2)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric111.png'), ('Target', 'FPA_Stimuli/geometric101.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract088.png'), ('Target', 'FPA_Stimuli/abstract091.png'), ('Number', 2)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric160.png'), ('Target', 'FPA_Stimuli/geometric150.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric144.png'), ('Target', 'FPA_Stimuli/geometric134.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric129.png'), ('Target', 'FPA_Stimuli/geometric119.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/geometric159.png'), ('Target', 'FPA_Stimuli/geometric149.png'), ('Number', 1)]),
      OrderedDict([('Cue', 'FPA_Stimuli/abstract068.png'), ('Target', 'FPA_Stimuli/abstract037.png'), ('Number', 2)])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
    Routine FigurePairedPresentation
    Routine ISIs
  LoopTerminator trials_2
  Routine EndeLernphase
