PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Abfrage_NSWP
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Routines
  Routine GutenMorgen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Guten Morgen!
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  Routine VielErfolg
    TextComponent TextVielErfolg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Viel Erfolg!
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  Routine Abfrage
    ImageComponent bottomRight
      image = white.png
      pos = (0.6, -0.2)
      size = (0.4, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      texture resolution = 512
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    ImageComponent topRight
      image = white.png
      pos = (0.6, 0.2)
      size = (0.4, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      texture resolution = 512
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    ImageComponent bottomLeft
      image = white.png
      pos = (0.1, -0.2)
      size = (0.4, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      texture resolution = 512
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    ImageComponent topLeft
      image = white.png
      pos = (0.1, 0.2)
      size = (0.4, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      texture resolution = 512
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    ImageComponent Pfeile
      image = Pfeile.png
      ori = 45
      pos = (0.35, 0)
      size = (0.315, 0.191)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 4
      texture resolution = 512
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    MouseComponent mouse_resp
      clickable = topRight, topLeft, bottomRight, bottomLeft
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 4
      timeRelativeTo = routine
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    ImageComponent Stim_Background
      image = white.png
      pos = (-0.5, 0)
      size = (0.4, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      texture resolution = 512
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    TextComponent Stimulus
      color = black
      letterHeight = 0.07
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $Cue
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    TextComponent topLeftTxt
      color = black
      letterHeight = 0.07
      pos = (0.1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $L1
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    TextComponent bottomLeftTxt
      color = black
      letterHeight = 0.07
      pos = (0.1, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $L2
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    TextComponent topRightTxt
      color = black
      letterHeight = 0.07
      pos = (0.6, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $R1
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    TextComponent bottomRightTxt
      color = black
      letterHeight = 0.07
      pos = (0.6, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $R2
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  Routine VielenDank
    TextComponent Ende
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Ende

        Vielen Dank!
  Routine Anleitung1
    TextComponent Anleitungstext1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Im Folgenden wird Ihnen auf der linken Seite des Bildschirms ein Wort gezeigt.

        Auf der rechten Seite werden vier Antwortmöglichkeiten zu sehen sein.

        Bitte antworten Sie immer erst, wenn die Pfeile zwischen den Antwortmöglichkeiten auftauchen.
        Sie haben dann 4 Sekunden um mit einem Mausklick das korrekte Wortpaar aus der Lernphase zu vervollständigen.

        -> Weiter mit einem Mausklick
    MouseComponent mouseNext
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine Anleitung2
    TextComponent Anleitungstext2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Bei jeder Aufgabe haben Sie insgesamt 7 Sekunden Zeit zu antworten.

        Zwischen den Aufgaben wird es kurze Pausen geben.

        -> Starten mit einem Mausclick
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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  Routine ISIs
    ImageComponent Fixation
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      texture resolution = 512
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    CodeComponent ITI
      Code Type = Auto->JS
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      Begin Routine:
        jitter = random() * 3.3 + 1.7
        jitter = round(jitter, 1)
        thisExp.addData('jitter',jitter)
  Routine WaitingforScanner
    TextComponent Wait_for_Scanner
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Warte auf Scanner...
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    KeyboardComponent ScannerStart
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PreStimulus
    ImageComponent Cross
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Anleitung1
  Routine Anleitung2
  Routine WaitingforScanner
  Routine PreStimulus
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:60
    conditionsFile = NSWP_Abfrage_Stimulus_List.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Cue', 'SEILOG'), ('Target', 'LERBEN'), ('L1', 'DEIFEN'), ('L2', 'LERBEN'), ('R1', 'MISDIG'), ('R2', 'TEUBED'), ('CorrPos', 'L2'), ('CorrAns', 'LERBEN')]),
      OrderedDict([('Cue', 'GANTIG'), ('Target', 'HEBOTZ'), ('L1', 'BENTER'), ('L2', 'REIGEB'), ('R1', 'LEBFER'), ('R2', 'HEBOTZ'), ('CorrPos', 'R2'), ('CorrAns', 'HEBOTZ')]),
      OrderedDict([('Cue', 'GERNUB'), ('Target', 'MINTER'), ('L1', 'FORUNG'), ('L2', 'EIGSAM'), ('R1', 'MINTER'), ('R2', 'STILEI'), ('CorrPos', 'R1'), ('CorrAns', 'MINTER')]),
      OrderedDict([('Cue', 'FINDES'), ('Target', 'TRIDUS'), ('L1', 'PFEKEL'), ('L2', 'KRELAS'), ('R1', 'TRIDUS'), ('R2', 'DEUNET'), ('CorrPos', 'R1'), ('CorrAns', 'TRIDUS')]),
      OrderedDict([('Cue', 'FOLNER'), ('Target', 'FARREI'), ('L1', 'FARREI'), ('L2', 'HALZEN'), ('R1', 'HENLEN'), ('R2', 'STUTIK'), ('CorrPos', 'L1'), ('CorrAns', 'FARREI')]),
      OrderedDict([('Cue', 'ZEINER'), ('Target', 'STILEI'), ('L1', 'WUNTIG'), ('L2', 'LEUWIS'), ('R1', 'DROMEN'), ('R2', 'STILEI'), ('CorrPos', 'R2'), ('CorrAns', 'STILEI')]),
      OrderedDict([('Cue', 'FRATEN'), ('Target', 'ACHMEN'), ('L1', 'STOMAT'), ('L2', 'STETEL'), ('R1', 'GEMLAL'), ('R2', 'ACHMEN'), ('CorrPos', 'R2'), ('CorrAns', 'ACHMEN')]),
      OrderedDict([('Cue', 'HELUNG'), ('Target', 'ROFERD'), ('L1', 'EIGERN'), ('L2', 'FASENZ'), ('R1', 'BUNNIG'), ('R2', 'ROFERD'), ('CorrPos', 'R2'), ('CorrAns', 'ROFERD')])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
    Routine Abfrage
    Routine ISIs
  LoopTerminator trials
  Routine VielenDank
