PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = ImmediateRecall_NSWP
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Routines
  Routine Abfrage
    ImageComponent Pfeile
      image = Pfeile.png
      ori = 45
      pos = (0.35, 0)
      size = (0.315, 0.191)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 4
      texture resolution = 512
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    MouseComponent mouse_resp
      clickable = topLeft, bottomLeft, topRight, bottomRight
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 4
      timeRelativeTo = routine
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    ImageComponent Stim_Background
      image = white.png
      pos = (-0.5, 0)
      size = (0.4, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      texture resolution = 512
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    ImageComponent topLeft
      image = white.png
      pos = (0.1, 0.2)
      size = (0.4, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      texture resolution = 512
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    ImageComponent bottomLeft
      image = white.png
      pos = (0.1, -0.2)
      size = (0.4, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      texture resolution = 512
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    ImageComponent topRight
      image = white.png
      pos = (0.6, 0.2)
      size = (0.4, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      texture resolution = 512
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    ImageComponent bottomRight
      image = white.png
      pos = (0.6, -0.2)
      size = (0.4, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      texture resolution = 512
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    TextComponent Stimulus
      color = black
      letterHeight = 0.07
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $Cue
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    TextComponent topLeftTxt
      color = black
      letterHeight = 0.07
      pos = (0.1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $L1
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    TextComponent bottomLeftTxt
      color = black
      letterHeight = 0.07
      pos = (0.1, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $L2
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    TextComponent topRightTxt
      color = black
      letterHeight = 0.07
      pos = (0.6, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $R1
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    TextComponent bottomRightTxt
      color = black
      letterHeight = 0.07
      pos = (0.6, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $R2
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  Routine VielenDank
    TextComponent Ende
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Ende

        Vielen Dank!
  Routine Correct
    ImageComponent Cue_Background
      image = white.png
      pos = (-0.4, 0)
      size = (0.63, 0.382)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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    ImageComponent Target_Background
      image = white.png
      pos = (0.4, 0)
      size = (0.63, 0.382)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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    TextComponent CueWord
      color = black
      letterHeight = 0.1
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Cue
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    TextComponent TargetWord
      color = black
      letterHeight = 0.1
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Target
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  Routine Anleitung1
    TextComponent Anleitungstext1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Im Folgenden wird Ihnen für sieben Sekunden auf der linken Seite des Bildschirms ein Wort gezeigt.

        Auf der rechten Seite werden vier Antwortmöglichkeiten zu sehen sein.

        -> Weiter mit einem Mausklick
    MouseComponent mouseNext
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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  Routine ISIs
    ImageComponent Fixation
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      texture resolution = 512
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    CodeComponent ITI
      Code Type = Auto->JS
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      Begin Routine:
        jitter = random() * 3.3 + 1.7
        jitter = round(jitter, 1)
        thisExp.addData('jitter', jitter)
  Routine Anleitung2
    TextComponent Anleitungstext2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Bitte antworten Sie immer erst, wenn die Pfeile zwischen den Antwortmöglichkeiten auftauchen.
        Sie haben dann noch 4 Sekunden um mit einem Mausklick das korrekte Wortpaar aus der Lernphase zu vervollständigen.

        Nach Ihrer Antwort wird Ihnen das richtige Wortpaar angezeigt.

        Zwischen den Aufgaben wird es kurze Pausen geben.

        -> Weiter mit einem Mausclick
    MouseComponent mouseNext3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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  Routine PreStimulus
    ImageComponent Cross
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine WaitingforScanner
    TextComponent Wait_for_Scanner
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Warte auf Scanner...
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    KeyboardComponent ScannerStart
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Anleitung1
  Routine Anleitung2
  Routine WaitingforScanner
  Routine PreStimulus
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:60
    conditionsFile = NSWP_ImmRec_Stimulus_List.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Cue', 'FRISIK'), ('Target', 'KRALIG'), ('L1', 'KRALIG'), ('L2', 'MOSTEL'), ('R1', 'PFEKEL'), ('R2', 'BUNGAT'), ('CorrPos', 'L1'), ('CorrAns', 'KRALIG')]),
      OrderedDict([('Cue', 'VENSEN'), ('Target', 'BUNKEN'), ('L1', 'KRISON'), ('L2', 'RENBAL'), ('R1', 'BUNKEN'), ('R2', 'TRELER'), ('CorrPos', 'R1'), ('CorrAns', 'BUNKEN')]),
      OrderedDict([('Cue', 'EITLEG'), ('Target', 'SENCHE'), ('L1', 'HAUBER'), ('L2', 'SENCHE'), ('R1', 'VORWIG'), ('R2', 'KRASUM'), ('CorrPos', 'L2'), ('CorrAns', 'SENCHE')]),
      OrderedDict([('Cue', 'BILGEN'), ('Target', 'FOLBES'), ('L1', 'WEIGEG'), ('L2', 'FOLBES'), ('R1', 'GEMLAL'), ('R2', 'GEBEIG'), ('CorrPos', 'L2'), ('CorrAns', 'FOLBES')]),
      OrderedDict([('Cue', 'LEIZEM'), ('Target', 'TRASTE'), ('L1', 'ENDWIG'), ('L2', 'HEFLAS'), ('R1', 'TRASTE'), ('R2', 'ZEISEL'), ('CorrPos', 'R1'), ('CorrAns', 'TRASTE')]),
      OrderedDict([('Cue', 'SEBSER'), ('Target', 'LIEWAG'), ('L1', 'GEBEIG'), ('L2', 'LIEWAG'), ('R1', 'NEHDIT'), ('R2', 'TIERES'), ('CorrPos', 'L2'), ('CorrAns', 'LIEWAG')]),
      OrderedDict([('Cue', 'FINGIE'), ('Target', 'BERBEN'), ('L1', 'BERBEN'), ('L2', 'HEFLAS'), ('R1', 'DEUSIT'), ('R2', 'TEISER'), ('CorrPos', 'L1'), ('CorrAns', 'BERBEN')]),
      OrderedDict([('Cue', 'HELUNG'), ('Target', 'ROFERD'), ('L1', 'FASENZ'), ('L2', 'ROFERD'), ('R1', 'BUNNIG'), ('R2', 'EIGERN'), ('CorrPos', 'L2'), ('CorrAns', 'ROFERD')])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
    Routine Abfrage
    Routine ISIs
    Routine Correct
    Routine ISIs
  LoopTerminator trials
  Routine VielenDank
