PsychoPy2experiment version="2020.2.10"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Lernen_NSWP
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Routines
  Routine EndeLernphase
    TextComponent TextEnde
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Ende

        Vielen Dank
  Routine StartLernphase
    TextComponent Wilkommen
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Herzlich Willkommen!

        In der folgenden Lernphase werden Ihnen 60 Wortpaare mit Pausen dazwischen präsentiert. Nach der Hälfte haben Sie eine kleine Pause.

        Bitte versuchen Sie sich möglichst viele Wortpaare zu merken.
        Es ist hilfreich, die unsinnigen Wörter mit Ihnen vertrauten Bilddarstellungen zu verbinden.

        Um die Lernphase zu starten, drücken Sie bitte die Maustaste.

        Viel Erfolg!
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine ISIs
    ImageComponent Fixation
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      texture resolution = 512
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    CodeComponent ITI
      Code Type = Auto->JS
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      Begin Routine:
        jitter = random() * 3.3 + 1.7
        jitter = round(jitter, 1)
        thisExp.addData('jitter', jitter)
  Routine Pause
    ImageComponent fixation_point
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 56
      texture resolution = 512
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  Routine PauseEnd
    TextComponent Pause2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Pause Ende
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  Routine PauseStart
    TextComponent Pause1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Kleine Pause
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    KeyboardComponent key_resp
      allowedKeys = 'enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PreStimulus
    ImageComponent Kreuz
      image = Kreuz.png
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine WaitingforScanner
    TextComponent Wait_for_Scanner
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Warte auf Scanner
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    KeyboardComponent ScannerStart
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WordPairPresentation
    ImageComponent Target_Background
      image = white.png
      pos = (0.4, 0)
      size = (0.63, 0.382)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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    ImageComponent Cue_Background
      image = white.png
      pos = (-0.4, 0)
      size = (0.63, 0.382)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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    TextComponent CueWord
      color = black
      letterHeight = 0.1
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Cue
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    TextComponent TargetWord
      color = black
      letterHeight = 0.1
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Target
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Flow
  Routine StartLernphase
  Routine WaitingforScanner
  Routine PreStimulus
  LoopInitiator Encode1 loopType="TrialHandler"
    Selected rows = 0:29
    conditionsFile = NSWP_Lernen_Stimulus_List.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Cue', 'FINDES'), ('Target', 'TRIDUS')]),
      OrderedDict([('Cue', 'GENDAN'), ('Target', 'STUTIK')]),
      OrderedDict([('Cue', 'FURLEN'), ('Target', 'SERTEN')]),
      OrderedDict([('Cue', 'VERTEN'), ('Target', 'PISEIB')]),
      OrderedDict([('Cue', 'NEIRER'), ('Target', 'MAUTIG')]),
      OrderedDict([('Cue', 'FRISIK'), ('Target', 'KRALIG')]),
      OrderedDict([('Cue', 'VERLIG'), ('Target', 'TRELAS')]),
      OrderedDict([('Cue', 'STITEN'), ('Target', 'EIGERN')]),
      OrderedDict([('Cue', 'KLASTE'), ('Target', 'DAUFEN')]),
      OrderedDict([('Cue', 'FRATEN'), ('Target', 'ACHMEN')]),
      OrderedDict([('Cue', 'GENTES'), ('Target', 'VERKON')]),
      OrderedDict([('Cue', 'MASTRA'), ('Target', 'TEISPE')]),
      OrderedDict([('Cue', 'MARTEL'), ('Target', 'SETTEL')]),
      OrderedDict([('Cue', 'GENTIG'), ('Target', 'REIGEB')]),
      OrderedDict([('Cue', 'LUTGES'), ('Target', 'MERTEN')]),
      OrderedDict([('Cue', 'NEIRER'), ('Target', 'LENLAF')]),
      OrderedDict([('Cue', 'LEIMAT'), ('Target', 'HALNES')]),
      OrderedDict([('Cue', 'LIEMEL'), ('Target', 'ENTRAL')]),
      OrderedDict([('Cue', 'GEIBER'), ('Target', 'DEUSIT')]),
      OrderedDict([('Cue', 'WILERN'), ('Target', 'ANDLEN')]),
      OrderedDict([('Cue', 'SERANT'), ('Target', 'VORWIG')]),
      OrderedDict([('Cue', 'TERNAL'), ('Target', 'PAUNER')]),
      OrderedDict([('Cue', 'STUDEN'), ('Target', 'STAVEM')]),
      OrderedDict([('Cue', 'HELUNG'), ('Target', 'ROFERD')]),
      OrderedDict([('Cue', 'GERNUB'), ('Target', 'MINTER')]),
      OrderedDict([('Cue', 'SEILOG'), ('Target', 'LERBEN')]),
      OrderedDict([('Cue', 'GANTIG'), ('Target', 'HEBOTZ')])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
    Routine WordPairPresentation
    Routine ISIs
  LoopTerminator Encode1
  Routine PauseStart
  Routine WaitingforScanner
  Routine PreStimulus
  LoopInitiator Encode2 loopType="TrialHandler"
    Selected rows = 30:60
    conditionsFile = NSWP_Lernen_Stimulus_List.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine WordPairPresentation
    Routine ISIs
  LoopTerminator Encode2
  Routine EndeLernphase
